tutorial - STA with reliontomo:HIV (EMPIAR-10164).
You'll need to download its dataset -> scipion3 testdata --download reliontomo_STA_HIV_smalldataset
[
    {
        "object.className": "ProtImportTsMovies",
        "object.id": "2",
        "object.label": "tomo - import tilt-series movies",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "filesPath": "~Path to movies|%(SCIPION_TESTS)s/reliontomo_STA_HIV_smalldataset/|2|moviespath~",
        "filesPattern": "TS_03.mrc.mdoc",
        "isTomo5": false,
        "exclusionWords": null,
        "mdocInfo": null,
        "anglesFrom": 0,
        "importAction": 2,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRate": 0.675,
        "tiltAxisAngle": null,
        "doseInitial": 0.0,
        "dosePerFrame": 3.05,
        "gainFile": null,
        "darkFile": null
    },
    {
        "object.className": "ProtTsMotionCorr",
        "object.id": "51",
        "object.label": "motioncorr - align tilt-series movies",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputTiltSeriesM": "2.outputTiltSeriesM",
        "alignFrame0": 1,
        "alignFrameN": 8,
        "useAlignToSum": true,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 2.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "splitEvenOdd": true,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "gpuList": "0",
        "patchX": 0,
        "patchY": 0,
        "patchOverlap": 0,
        "group": 1,
        "groupLocal": 4,
        "tol": 0.2,
        "extraParams2": "",
        "gainRot": 0,
        "gainFlip": 0,
        "defectFile": null,
        "defectMap": null,
        "EERtext": null,
        "eerGroup": 32,
        "eerSampling": 0,
        "doMagCor": false,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0
    },
    {
        "object.className": "ProtImodXraysEraser",
        "object.id": "114",
        "object.label": "imod - X-rays eraser",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputSetOfTiltSeries": "51.TiltSeries",
        "peakCriterion": 8.0,
        "diffCriterion": 6.0,
        "maximumRadius": 4.2,
        "bigDiffCriterion": 19,
        "processOddEven": true,
        "hostName": "localhost",
        "numberOfThreads": 4
    },
    {
        "object.className": "CistemProtTsCtffind",
        "object.id": "152",
        "object.label": "cistem - tilt-series ctffind",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputTiltSeries": "51.TiltSeries",
        "ctfDownFactor": 1.0,
        "windowSize": 512,
        "lowRes": 50.0,
        "highRes": 5.0,
        "minDefocus": 10000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 500.0,
        "slowSearch": false,
        "fixAstig": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "measureTilt": false,
        "measureThickness": false,
        "search1D": true,
        "refine2D": true,
        "lowResNodes": 30.0,
        "highResNodes": 3.0,
        "useRoundedSquare": false,
        "downweightNodes": false
    },
    {
        "object.className": "ProtImodDoseFilter",
        "object.id": "207",
        "object.label": "imod - Dose filter",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputSetOfTiltSeries": "114.TiltSeries",
        "initialDose": 0.0,
        "inputDoseType": 0,
        "fixedImageDose": 1.0,
        "processOddEven": true,
        "hostName": "localhost",
        "numberOfThreads": 8
    },
    {
        "object.className": "ProtImodXcorrPrealignment",
        "object.id": "244",
        "object.label": "imod - Coarse prealignment",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputSetOfTiltSeries": "207.TiltSeries",
        "cumulativeCorr": false,
        "computeAlignment": true,
        "binning": 4,
        "Trimming parameters": null,
        "tiltAxisAngle": null,
        "pxTrim": "40 40",
        "xmin": null,
        "xmax": null,
        "ymin": null,
        "ymax": null,
        "filterRadius1": 0.0,
        "filterSigma1": 0.03,
        "filterRadius2": 0.25,
        "filterSigma2": 0.05
    },
    {
        "object.className": "ProtImodFiducialModel",
        "object.id": "291",
        "object.label": "imod - Generate fiducial model",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "typeOfModel": 0,
        "inputSetOfTiltSeries": "244.TiltSeries",
        "sizeOfPatches": "680 680",
        "patchLayout": 0,
        "overlapPatches": "0.33 0.33",
        "numberOfPatches": null,
        "iterationsSubpixel": 1,
        "pxTrim": "40 40",
        "xmin": null,
        "xmax": null,
        "ymin": null,
        "ymax": null,
        "filterRadius1": 0.0,
        "filterSigma1": 0.03,
        "filterRadius2": 0.125,
        "filterSigma2": 0.03,
        "fiducialDiameter": 10.0,
        "twoSurfaces": true,
        "numberFiducial": 25,
        "doTrackWithModel": true,
        "refineSobelFilter": true,
        "scalableSigmaForSobelFilter": 0.12
    },
    {
        "object.className": "ProtImodFiducialAlignment",
        "object.id": "345",
        "object.label": "imod - Fiducial alignment",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputSetOfLandmarkModels": "291.FiducialModelGaps",
        "twoSurfaces": true,
        "computeAlignment": true,
        "binning": 4,
        "rotationSolutionType": 2,
        "groupRotationSize": 5,
        "magnificationSolutionType": 0,
        "groupMagnificationSize": 4,
        "tiltAngleSolutionType": 1,
        "groupTiltAngleSize": 5,
        "distortionSolutionType": 0,
        "xStretchGroupSize": 7,
        "skewGroupSize": 11
    },
    {
        "object.className": "ProtAssignTransformationMatrixTiltSeries",
        "object.id": "390",
        "object.label": "tomo - Tilt-series assign alignment",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "getTMSetOfTiltSeries": "345.TiltSeries",
        "setTMSetOfTiltSeries": "114.TiltSeries"
    },
    {
        "object.className": "ProtImodCtfCorrection",
        "object.id": "426",
        "object.label": "imod - CTF correction",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputSetOfTiltSeries": "390.TiltSeries_2",
        "inputSetOfCtfTomoSeries": "152.goodSetOfCTFTomoSeries2",
        "defocusTol": 200,
        "interpolationWidth": 15,
        "useGpu": true,
        "gpuList": "0",
        "processOddEven": true
    },
    {
        "object.className": "ProtImodTsNormalization",
        "object.id": "2739",
        "object.label": "imod - Tilt-series preproces",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputSetOfTiltSeries": "426.TiltSeries",
        "binning": 6,
        "floatDensities": 2,
        "scaleMean": 0.0,
        "scaleSd": 1.0,
        "scaleMax": 255.0,
        "scaleMin": 0.0,
        "modeToOutput": 0,
        "antialias": 5,
        "processOddEven": true,
        "hostName": "localhost",
        "numberOfThreads": 4
    },
    {
        "object.className": "ProtTomo3dReconstrucTomo",
        "object.id": "2781",
        "object.label": "tomo3d - reconstruct tomogram",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputSetOfTiltSeries": "2739.TiltSeries",
        "doEvenOdd": true,
        "method": 1,
        "nIterations": 30,
        "setShape": true,
        "height": 240,
        "width": 0,
        "iniSlice": 0,
        "finSlice": 0,
        "Hamming": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 7
    },
    {
        "object.className": "DynamoBoxing",
        "object.id": "2878",
        "object.label": "dynamo - vectorial picking",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputTomograms": "2781.tomograms",
        "boxSize": 20,
        "deleteGenMFiles": true
    },
    {
        "object.className": "DynamoModelWorkflow",
        "object.id": "3181",
        "object.label": "dynamo - model workflow",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputMeshes": "2878.meshes",
        "boxSize": 96,
        "meshParameter": 5,
        "maxTr": 100000,
        "doRefineMesh": true,
        "subDivision": 1,
        "cropping": 10
    },
    {
        "object.className": "ProtRelion5ExtractSubtomos",
        "object.id": "3887",
        "object.label": "reliontomo - Extract subtomos 3D",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inReParticles": "3181.coordinates",
        "inputCtfTs": "152.goodSetOfCTFTomoSeries2",
        "inputTS": "390.TiltSeries_2",
        "handedness": true,
        "binningFactor": 6.0,
        "boxSize": 128,
        "croppedBoxSize": 64,
        "maxDose": 50,
        "minNoFrames": 1,
        "write2dStacks": false,
        "outputInFloat16": false,
        "extraParams": null,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "numberOfMpi": 3
    },
    {
        "object.className": "ProtRelionDeNovoInitialModel",
        "object.id": "3979",
        "object.label": "reliontomo - 3D initial model",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inReParticles": "3887.relionParticles",
        "doCTF": true,
        "ignoreCTFUntilFirstPeak": false,
        "nVdamMiniBatches": 30,
        "regularisation": 4.0,
        "numberOfClasses": 1,
        "maskDiameter": 350,
        "flattenSolvent": true,
        "symmetry": "C6",
        "doInC1AndApplySymLater": true,
        "priorWidthTiltAngle": 8,
        "angularSamplingDeg": 1,
        "offsetSearchRangePix": 6.0,
        "offsetSearchStepPix": 2.0,
        "parallelDiscIO": true,
        "pooledSubtomos": 20,
        "allParticlesRam": false,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "0",
        "keepOnlyLastIterFiles": false,
        "oversampling": 1,
        "alignmentAsPriors": false,
        "extraParams": null,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "numberOfMpi": 1
    },
    {
        "object.className": "ProtRelionRefineSubtomograms",
        "object.id": "4036",
        "object.label": "reliontomo - 3D auto-refine",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "3979",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inReParticles": "4104.relionParticles",
        "referenceVolume": "3979.average",
        "isMapAbsoluteGreyScale": true,
        "doResizeRef": true,
        "initialLowPassFilterA": 60.0,
        "symmetry": "C6",
        "doCTF": true,
        "ignoreCTFUntilFirstPeak": false,
        "maskDiameter": 350,
        "zeroMask": true,
        "solventCorrectFSC": false,
        "doBlushReg": false,
        "angularSamplingDeg": 2,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "localSearchAutoSampling": 4,
        "relaxSym": null,
        "useFinerAngularSampling": false,
        "priorWidthTiltAngle": 10,
        "parallelDiscIO": true,
        "pooledSubtomos": 20,
        "allParticlesRam": false,
        "scratchDir": null,
        "combineItersDisc": false,
        "skipPadding": true,
        "doGpu": true,
        "gpusToUse": "0",
        "keepOnlyLastIterFiles": false,
        "oversampling": 1,
        "alignmentAsPriors": false,
        "extraParams": null,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "numberOfMpi": 3
    },
    {
        "object.className": "ProtRelion5ExtractSubtomos",
        "object.id": "4104",
        "object.label": "reliontomo - Extract subtomos 2D",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inReParticles": "3181.coordinates",
        "inputCtfTs": "152.goodSetOfCTFTomoSeries2",
        "inputTS": "390.TiltSeries_2",
        "handedness": true,
        "binningFactor": 6.0,
        "boxSize": 128,
        "croppedBoxSize": 64,
        "maxDose": 50,
        "minNoFrames": 1,
        "write2dStacks": true,
        "outputInFloat16": false,
        "extraParams": null,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "numberOfMpi": 3
    }
]